---
API: 2.1
OpenSesame: 3.2.5
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title trial1
set subject_parity even
set subject_nr 0
set start atlanta1
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 26
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/paxtonfitzpatrick/Documents/Dartmouth/Thesis/memory-dynamics/experiment"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set background white

define sequence atlanta1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run presurveyq1 always
	run presurveyq2 always
	run presurveyq3 always
	run instructions always
	run readyforvideo always
	run video always
	run readyforrecall always
	run recall always
	run finishedscreen always

define inline_script finishedscreen
	set description "Executes Python code"
	___run__
	done_canvas.show()
	# generate random subject ID for data protection
	randstr = ''.join([random.choice(string.ascii_letters + string.digits) for n in xrange(10)])
	subid = 'subject'+randstr
	
	# identify data folder
	datapath = var.experiment_path[:-10]+'data/audio-arrays/'
	
	# save numpy object from previous screen here so it doesn't slow down experiment
	log.write(randstr)
	log.write(var.presq1)
	log.write(var.preq2)
	log.write(var.preq3)
	
	
	np.save(datapath+subid, var.recall_audio, allow_pickle=False)
	__end__
	___prepare__
	import numpy as np
	import random
	import string
	import time
	
	done_canvas = Canvas()
	done_canvas.text('That\'s it! Thank you for participating!')
	__end__

define inline_script instructions
	set description "Executes Python code"
	___run__
	
	# arrange widgets
	instr.set_widget(title, (0,0), colspan=4)
	instr.set_widget(vidtext, (0,1), colspan=3)
	instr.set_widget(vidimg, (1,1))
	instr.set_widget(resttext, (0,2), colspan=3)
	instr.set_widget(restimg, (1,2))
	instr.set_widget(recalltext, (0,3), colspan=3)
	instr.set_widget(micimg, (1,3))
	instr.set_widget(readybutton, (0,4), colspan=4)
	
	# instructions close when button is clicked
	button_clicked = instr._exec()
	__end__
	___prepare__
	# paths to images
	vidiconpath = pool['video.png']
	resticonpath = pool['mic.png']
	miciconpath = pool['mic.png']
	
	# create form
	instr = Form(
		cols=[1,1,1,1], rows=[1,1,1,1,1],
		margins=(25,25,25,25), spacing=25
		)
	
	# title widget
	title = Label(text='Overview')
	
	# part 1 explanation and image
	vidtext = Label(
		text='You will first view an episode of the TV show \x1B[3mAtlanta\x1B[23m. The episode is approximately 25 minutes long.'
		)
	vidimg = ImageWidget(path=vidiconpath)
	
	# part 2 explanation and image
	resttext = Label(
		text='You will then have an opportunity to take a brief break, if necessary. Once you are ready to continue, press the spacebar to start the recall phase.'
		)
	restimg = ImageWidget(path=resticonpath)
	
	# part 3 explanation and iamge
	recalltext = Label(
		text = 'Next, you will see a microphone icon. You will then have 10 minutes to describe what you recall of the episode \x1B[3min as much detail as possible\x1B[23m. Try your best to recount the events in order, but if you realize you missed something, feel free to return to it.'
		)
	micimg = ImageWidget(path=miciconpath)
	
	# continue button
	readybutton = Button(text='Got it!')
	__end__

define form_multiple_choice presurveyq1
	set timeout infinite
	set spacing 10
	set question "survey question 1?"
	__options__
	option 1
	option 2
	option 3
	__end__
	set margins "50;50;50;50"
	set form_var preq1
	set form_title "Pre-experiment Survey"
	set description "A simple multiple choice item"
	set button_text Next
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice presurveyq2
	set timeout infinite
	set spacing 10
	set question "Survey question 2?"
	__options__
	Yes
	No
	Maybe
	__end__
	set margins "50;50;50;50"
	set form_var preq2
	set form_title "Pre-experiment Survey"
	set description "A simple multiple choice item"
	set button_text Next
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_text_input presurveyq3
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var preq3
	set form_title "Pre-experiment Survey"
	set form_question "Survey question 3?"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_display readyforrecall
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ready
	set margins "50;50;50;50"
	set form_title "Ready?"
	__form_text__
	Press the "Ready!" button to begin recalling the vdieo.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display readyforvideo
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Ready!"
	set margins "50;50;50;50"
	set form_title "Ready?"
	__form_text__
	Press the "Ready!" button to begin the video
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_script recall
	set description "Executes Python code"
	___run__
	# show mic image on screen
	recall_canvas.show()
	
	# record audio
	duration = 10  # seconds
	fs = 44100
	var.recall_audio = sd.rec(int(duration * fs), samplerate=fs, channels=2, blocking=True)
	__end__
	___prepare__
	import sounddevice as sd
	
	miciconpath = pool['mic.png']
	recall_canvas = Canvas()
	recall_canvas.image(miciconpath, scale=0.25)
	__end__

define media_player_mpy video
	set video_src "../../video-stims/atlanta-ep1.mp4"
	set soundrenderer sounddevice
	set resizeVideo yes
	set playaudio yes
	set loop no
	set event_handler_trigger "on keypress"
	set event_handler "# FULL VIDEO IS 1,466,000 MS"
	set duration 4000
	set description "Media player based on moviepy"

